PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = context
  Units = use prefs
  Screen = 1
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Routines
  Routine test
  Routine trial
    StaticComponent ITI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0
    TextComponent trialInstrText
      color = black
      wrapWidth = 20
      stopVal [duration (s)] = 3.0
      pos = [0, 0.8]
      text = Predict whether the customer will get sick from this food.
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent restaurantText
      color = purple
      stopVal [duration (s)] = 3.0
      pos = [0, +0.35]
      text [set every repeat] = $restaurants[$contextId]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    ImageComponent foodImg
      stopVal [duration (s)] = 3.0
      pos = [0, 0.0]
      startVal [time (s)] = 1
      image [set every repeat] = os.path.join('foods', $foodFilesPrefix + str($cueId) + '.png')
      size = [0.5, 0.5]
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    TextComponent fixationJitterText
      color = black
      stopVal [duration (s)] = 0.5
      durationEstim = 0.5
      text = +
      startVal [time (s)] = 5.0
      letterHeight = 0.1
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    KeyboardComponent responseKey
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 1
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    ImageComponent sickImg
      stopVal [duration (s)] = 3.0
      pos = [-0.5, -0.6]
      startVal [time (s)] = 1
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg
      stopVal [duration (s)] = 3
      pos = [+0.5, -0.6]
      startVal [time (s)] = 1.0
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    TextComponent fixationITIText
      color = black
      stopVal [duration (s)] = 1.0
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    StaticComponent Jitter
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 5.0
    TextComponent sickHighlight
      stopVal [duration (s)] = 3
      pos = [-0.5, -0.35]
      text = _
      startVal [time (s)] = 1
      letterHeight = 1.0
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    TextComponent notsickHighlight
      stopVal [duration (s)] = 3
      pos = [0.5, -0.35]
      text = _
      startVal [time (s)] = 1
      letterHeight = 1
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    CodeComponent highlightChoice
      Each Frame:
        # highlight subject's response
        #
        if responseKey.keys:
            if responseKey.keys == 'left': # sick
                sickHighlight.opacity = 1
                notsickHighlight.opacity = 0
            elif responseKey.keys == 'right': # not sick
                sickHighlight.opacity = 0
                notsickHighlight.opacity = 1
            else:
                assert False, 'Can only have one response, left or right'
        # hack to re-render the text with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)
      Begin Routine:
        # don't highlight anything initially
        #
        sickHighlight.setOpacity(0)
        notsickHighlight.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)
    TextComponent correctText
      color = blue
      stopVal [duration (s)] = 1.0
      pos = [0, -0.3]
      text = CORRECT
      startVal [time (s)] = 4.0
      font = Arial Bold
      letterHeight = 0.1
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    TextComponent wrongText
      color = red
      stopVal [duration (s)] = 1.0
      pos = [0, -0.3]
      text = WRONG
      startVal [time (s)] = 4.0
      font = Arial Bold
      letterHeight = 0.1
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    TextComponent timeoutText
      color = purple
      stopVal [duration (s)] = 1.0
      pos = [0, -0.3]
      text = TIMEOUT
      startVal [time (s)] = 4
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent sickFeedback
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 4.0
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickFeedback
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 4.0
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    TextComponent gotSickText
      color = black
      stopVal [duration (s)] = 1.0
      pos = [0, -0.5]
      text = The customer got sick!
      startVal [time (s)] = 4
      letterHeight = 0.075
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    TextComponent didntGetSickText
      color = black
      stopVal [duration (s)] = 1.0
      pos = [0, -0.5]
      text = The customer didn't get sick!
      startVal [time (s)] = 4.0
      letterHeight = 0.075
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    CodeComponent showFeedback
      Each Frame:
        # show user some feedback
        #
        if t >= 4.0 and not isFeedbackShown: # TODO don't hardcode
            isFeedbackShown = True
            if not responseKey.keys: # no response was made
                timeoutText.setOpacity(1)
                timeoutText.setText(timeoutText.text)
            else: # response was made
                if responseKey.corr == 1:
                    correctText.setOpacity(1)
                    wrongText.setOpacity(0)
                elif responseKey.corr == 0:
                    correctText.setOpacity(0)
                    wrongText.setOpacity(1)
                else:
                    print responseKey.corr
                    assert False, "responseKey.corr = 0 or 1"

                if sick == 'Yes':
                    sickFeedback.setOpacity(1)
                    notsickFeedback.setOpacity(0)
                    gotSickText.setOpacity(1)
                    didntGetSickText.setOpacity(0)
                elif sick == 'No':
                    sickFeedback.setOpacity(0)
                    notsickFeedback.setOpacity(1)
                    gotSickText.setOpacity(0)
                    didntGetSickText.setOpacity(1)
                else:
                    print sick
                    assert False, "sick can only be Yes or No"

                # hack to redraw the texts with new opacity
                correctText.setText(correctText.text)
                wrongText.setText(wrongText.text)
                gotSickText.setText(gotSickText.text)
                didntGetSickText.setText(didntGetSickText.text)
      Begin Routine:
        # clear the feedback
        isFeedbackShown = False
        correctText.setOpacity(0)
        wrongText.setOpacity(0)
        timeoutText.setOpacity(0)
        sickFeedback.setOpacity(0)
        notsickFeedback.setOpacity(0)
        gotSickText.setOpacity(0)
        didntGetSickText.setOpacity(0)
        # hack to re-render the texts with new opacity
        correctText.setText(correctText.text)
        wrongText.setText(wrongText.text)
        timeoutText.setText(timeoutText.text)
        gotSickText.setText(gotSickText.text)
        didntGetSickText.setText(didntGetSickText.text)
  Routine new_run
    TextComponent runInstr
      color = black
      text = You are about to learn about a new set of restaurants and foods.
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent getRestaurants
      Begin Routine:
        restaurants = [r.strip() for r in restaurantNames.split(',')]
        assert len(restaurants) == 3, "There should be 3 comma-separated restaurant names per run; found " + str(len(restaurants))
  Routine feedback
  Routine test_2
    StaticComponent ITI_2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0
    TextComponent trialInstrText_2
      color = black
      wrapWidth = 20
      stopVal [duration (s)] = 3.0
      pos = [0, 0.8]
      text = Predict whether the customer will get sick from this food.
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent restaurantText_2
      color = purple
      stopVal [duration (s)] = 3.0
      pos = [0, +0.35]
      text [set every repeat] = $restaurants[$contextId]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    ImageComponent foodImg_2
      stopVal [duration (s)] = 3.0
      pos = [0, 0.0]
      startVal [time (s)] = 1
      image [set every repeat] = os.path.join('foods', $foodFilesPrefix + str($cueId) + '.png')
      size = [0.5, 0.5]
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    TextComponent fixationJitterText_2
      color = black
      stopVal [duration (s)] = 0.5
      durationEstim = 0.5
      text = +
      startVal [time (s)] = 4.0
      letterHeight = 0.1
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    KeyboardComponent responseKey_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 1
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    ImageComponent sickImg_2
      stopVal [duration (s)] = 3.0
      pos = [-0.5, -0.6]
      startVal [time (s)] = 1
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg_2
      stopVal [duration (s)] = 3
      pos = [+0.5, -0.6]
      startVal [time (s)] = 1.0
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    TextComponent fixationITIText_2
      color = black
      stopVal [duration (s)] = 1.0
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    StaticComponent Jitter_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 4.0
    TextComponent sickHighlight_2
      stopVal [duration (s)] = 3
      pos = [-0.5, -0.35]
      text = _
      startVal [time (s)] = 1
      letterHeight = 1.0
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    TextComponent notsickHighlight_2
      stopVal [duration (s)] = 3
      pos = [0.5, -0.35]
      text = _
      startVal [time (s)] = 1
      letterHeight = 1
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    CodeComponent highlightChoice_2
      Each Frame:
        # highlight subject's response
        #
        if responseKey_2.keys:
            if responseKey_2.keys == 'left': # sick
                sickHighlight_2.opacity = 1
                notsickHighlight_2.opacity = 0
            elif responseKey_2.keys == 'right': # not sick
                sickHighlight_2.opacity = 0
                notsickHighlight_2.opacity = 1
            else:
                assert False, 'Can only have one response, left or right'
        # hack to re-render the text with new opacity
        sickHighlight_2.setText(sickHighlight_2.text)
        notsickHighlight_2.setText(notsickHighlight_2.text)
      Begin Routine:
        # don't highlight anything initially
        #
        sickHighlight_2.setOpacity(0)
        notsickHighlight_2.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight_2.setText(sickHighlight_2.text)
        notsickHighlight_2.setText(notsickHighlight_2.text)
Flow
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'restaurantNames': u"Molina's Cantina,Restaurante Arroyo,El Coyote Caf\xe9", u'foodFilesPrefix': u'mexican_food'},
      {u'restaurantNames': u'Le Parisien,Chez Toinette,Au Petit Sud Ouest', u'foodFilesPrefix': u'french_food'},
      {u'restaurantNames': u"Lau's Dim Sum Bar,OO Kook Korean BBQ,Happy Lamb Hot Pot", u'foodFilesPrefix': u'asian_food'}]
    Routine new_run
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = irrelevant.xlsx
      loopType = random
      nReps = 1
      Selected rows = range(1,5)
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      conditions:
        [{u'contextId': u'Training', u'corrAns': None, u'sick': None, u'cueId': None},
        {u'contextId': 0, u'corrAns': u'left', u'sick': u'Yes', u'cueId': 0},
        {u'contextId': 0, u'corrAns': u'right', u'sick': u'No', u'cueId': 1},
        {u'contextId': 1, u'corrAns': u'left', u'sick': u'Yes', u'cueId': 0},
        {u'contextId': 1, u'corrAns': u'right', u'sick': u'No', u'cueId': 1},
        {u'contextId': u' Test', u'corrAns': None, u'sick': None, u'cueId': None},
        {u'contextId': 0, u'corrAns': u'left', u'sick': u'Yes', u'cueId': 0},
        {u'contextId': 2, u'corrAns': u'left', u'sick': u'Yes', u'cueId': 0},
        {u'contextId': 0, u'corrAns': None, u'sick': None, u'cueId': 2},
        {u'contextId': 2, u'corrAns': None, u'sick': None, u'cueId': 2}]
      Routine trial
    LoopTerminator trials
    LoopInitiator test_trials_2 loopType="TrialHandler"
      conditionsFile = irrelevant.xlsx
      loopType = sequential
      nReps = 1
      Selected rows = range(6,10)
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      conditions:
        [{u'contextId': u'Training', u'corrAns': None, u'sick': None, u'cueId': None},
        {u'contextId': 0, u'corrAns': u'left', u'sick': u'Yes', u'cueId': 0},
        {u'contextId': 0, u'corrAns': u'right', u'sick': u'No', u'cueId': 1},
        {u'contextId': 1, u'corrAns': u'left', u'sick': u'Yes', u'cueId': 0},
        {u'contextId': 1, u'corrAns': u'right', u'sick': u'No', u'cueId': 1},
        {u'contextId': u' Test', u'corrAns': None, u'sick': None, u'cueId': None},
        {u'contextId': 0, u'corrAns': u'left', u'sick': u'Yes', u'cueId': 0},
        {u'contextId': 2, u'corrAns': u'left', u'sick': u'Yes', u'cueId': 0},
        {u'contextId': 0, u'corrAns': None, u'sick': None, u'cueId': 2},
        {u'contextId': 2, u'corrAns': None, u'sick': None, u'cueId': 2}]
      Routine test_2
    LoopTerminator test_trials_2
  LoopTerminator runs
